PsychoPy2experiment version="3.0.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment_1
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $name
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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  Routine instruction
    TextComponent info_1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Make the gesture written on the screen.

        Do it once the square appears.

        (This is a training session)
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine training
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Make the gesture written on the screen.

        Do it once the square appears.

        (This the experimental session)
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../../../../../../../../../Users/paulpierzchlewicz/Documents/BrainHack/experiment_setup/trials.csv
    loopType = fullRandom
    nReps = 2
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    conditions:
      [OrderedDict([('name', 'l')]),
      OrderedDict([('name', 'r')]),
      OrderedDict([('name', 't')]),
      OrderedDict([('name', 'w')])]
    Routine trial
  LoopTerminator trials
  Routine training
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials_2
